SourceDir = getDirectory("Choose Source Directory ");

TargetDir = getDirectory("Choose Destination Directory ");

list = getFileList(SourceDir);

//Rotate images by 15 degrees till 360 degrees and save them

for(i = 0; i < list.length; i++) {

     showProgress(i+1, list.length);
  
     title = SourceDir + list[i];

     open(title);
     
     number = random() * 360;
     print('Angle', number);
     AppendSaveName =  'Original' + 'Rotation' + number;

     run("Rotate... ", "angle=number grid=1 interpolation=None stack" );
   
     saveAs('.tiff', TargetDir+ AppendSaveName + list[i]);
     
     close();
     
	
}